PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Insert your participant code'], expName, expInfo['date'])
  Experiment info = {'Insert your participant code': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = AffectiveCompatibilityNeg4
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Routines
  Routine welcome
    TextComponent Text_Welcome
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating
        in this experiment!
        Please read through the
        instructions carefully.

        Press space to continue…
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent init_code
      Code Type = Both
      Begin Experiment:
        import random
        count = 0
        training_allowed_keys = ["w", "o"]
        exp_allowed_keys = ["g","h"]


        def shuffle_array(arr):
            new_arr = arr.copy()
            random.shuffle(new_arr)
            return new_arr


        rand_train_keys = shuffle_array(training_allowed_keys)
        rand_exp_keys = shuffle_array(exp_allowed_keys)
        praSelfKey =rand_train_keys[0].upper()
        praStraKey = rand_train_keys[1].upper()
        expMatchKey = rand_exp_keys[0].upper()
        expMismatchKey = rand_exp_keys[1].upper()


        experiment_dict = {
            "self": {
                "identity": "NEGATIVE",
                "label": "SELF",
                "corr_ans": rand_train_keys[0]
            },
            "stranger": {
                "identity": "POSITIVE",
                "label": "STRANGER",
                "corr_ans": rand_train_keys[1]
            }
        }

        thisExp.addData('experiment_dict', experiment_dict)
      Begin JS Experiment:
        count = 0
        training_allowed_keys = ["w", "o"];
        exp_allowed_keys = ["g", "h"];
        const shuffle_array = (arr) => {
          const new_arr = [...arr];
          return new_arr.sort(() => Math.random() - 0.5);
        };
        rand_train_keys = shuffle_array(training_allowed_keys);
        rand_exp_keys = shuffle_array(exp_allowed_keys);
        praSelfKey = rand_train_keys[0].toUpperCase();
        praStraKey = rand_train_keys[1].toUpperCase();
        expMatchKey = rand_exp_keys[0].toUpperCase();
        expMismatchKey = rand_exp_keys[1].toUpperCase();
        experiment_dict = {"self": {"identity": "NEGATIVE", "label": "SELF", "corr_ans": rand_train_keys[0]}, "stranger": {"identity": "POSITIVE", "label": "STRANGER", "corr_ans": rand_train_keys[1]}};
        psychoJS.experiment.addData("experiment_dict", JSON.stringify(experiment_dict));
  Routine Ins1
    TextComponent text
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the following task you will be asked to indicate which picture goes with which label.
        You and a stranger will be assigned a set of pictures.

        YOU will be assigned the NEGATIVE pictures.

        A STRANGER will be assigned the POSITIVE pictures.

        Press space to continue…
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PairCheck
    TextComponent check_2
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Who does this type of picture represent?
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    TextComponent type_2
      letterHeight = .075
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $experiment_dict[dict_key]['identity']
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    TextComponent keys_2
      letterHeight = .045
      pos = (0,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press " + praSelfKey + " for SELF, press " + praStraKey + " for STRANGER."
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    KeyboardComponent key_resp_2
      allowedKeys = 'w','o'
      correctAns = $experiment_dict[dict_key]['corr_ans']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2.corr:
            practice_correct_ans = 1
            practice_incorrect_ans = 0
        else:
            practice_correct_ans = 0
            practice_incorrect_ans = 1
  Routine correct
    TextComponent text_correct
      color = green
      contrast = 70
      letterHeight = .075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = ✓
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  Routine incorrect
    TextComponent incorrect_text
      color = red
      letterHeight = .075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = X
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  Routine exp_Ins
    TextComponent exp_instructions
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now perform the main experimental task.

        A trial will begin with a fixation cross. When you see this cross, please focus on it. A picture which will either be positive or negative will then appear. A label 'SELF' or 'STRANGER' will also appear. Your task is to indicate if the picture and the label match or do not match. You will be provided feedback on if you are correct or incorrect.

        You will complete two blocks of trials, each lasting aproximately 5 minutes. After this experiment you will be asked to fill out a brief survey.

        Press space to continue...
    KeyboardComponent exp_ins_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine exp_Ins1
    TextComponent text_2
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        REMEMBER:

        YOU are the NEGATIVE pictures.

        A STRANGER is the POSITIVE pictures.

        Press space to continue…
    KeyboardComponent exp_Ins1_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_Ins2
    TextComponent text_3
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"If the picture and the label match please press the " + expMatchKey + " key. \n\n If the picture and the label do not match please press the " + expMismatchKey + " key. \n\n Press space to continue…" 
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    KeyboardComponent exp_Ins2_Key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine exp_Ins3
    TextComponent exp_Instructions4
      letterHeight = 0.045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You will now do a few practice trials.

        Press spacebar when ready...
    KeyboardComponent exp_Ins_key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    ImageComponent fix_cross_pre
      image = Images/fixation.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        if ((TrialType === "Match")) {
            correct_ans_main = rand_exp_keys[0];
        } else {
            correct_ans_main = rand_exp_keys[1];
        }
        function getRndInteger(min, max) {
          min = Math.ceil(min);
          max = Math.floor(max);
          return Math.floor(Math.random()*(max-min+1))+min;
        }
        time = getRndInteger(500,800)
        times = time/1000
      Begin Routine:
        if TrialType == "Match":
            correct_ans_main = rand_exp_keys[0]
        else:
            correct_ans_main = rand_exp_keys[1]

        import random
        time = random.randint(500,800)
        times = time/1000
  Routine waitResp
    ImageComponent fix_cros_wait
      image = Images\fixation.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp_3
      allowedKeys = 'g','h',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine prac_main_frame
    ImageComponent fix_main_cross
      image = Images/fixation.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.733
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    ImageComponent picture_main
      image [set every repeat] = $Image
      pos [set every repeat] = [0, PictureX]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .233
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    TextComponent label_main
      letterHeight = .075
      pos [set every repeat] = [0, LabelX]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .233
      text [set every repeat] = $Label
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    KeyboardComponent judgement
      allowedKeys = 'g','h'
      correctAns = $correct_ans_main
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.733
      store = first key
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        if ((! judgement.keys)) {
            doCorrect = 0;
            doIncorrect = 0;
            doSlow = 1;
        } else {
            if (judgement.corr) {
                doCorrect = 1;
                doIncorrect = 0;
                doSlow = 0;
            } else {
                doCorrect = 0;
                doIncorrect = 1;
                doSlow = 0;
            }
        }
      End Routine:
        if not judgement.keys:
            doCorrect = 0
            doIncorrect = 0
            doSlow = 1
        elif judgement.corr:
            doCorrect = 1
            doIncorrect = 0
            doSlow = 0

        else:
            doCorrect = 0
            doIncorrect = 1
            doSlow = 0
  Routine correct_prac
  Routine too_slow
    TextComponent tooSlow
      color = gold
      letterHeight = .075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = TOO SLOW
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  Routine main_ins
    TextComponent begin
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        You will now begin the main part of the experiment.

        Please keep in mind that it is really important that you try your hardest with this experiment. So try to be as quick and accurate as possible. Don't sacrifice accuracy for speed. We need good quality data so that we can understand human cognition.

        You will now complete two blocks just like the practice trials that you did. They will be a little bit longer but you should finish each block in less than 5 minutes.

        Remember after these blocks you will need to fill out a short survey.

        Press space when you are ready to proceed...
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine main_frame
    ImageComponent fix_mainf
      image = Images/fixation.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.733
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    ImageComponent image_mainf
      image [set every repeat] = $Image
      pos [set every repeat] = [0, PictureX]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .233
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    TextComponent label_mainf
      letterHeight = .075
      pos [set every repeat] = [0, LabelX]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .233
      text [set every repeat] = $Label
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    KeyboardComponent judge
      allowedKeys = 'g','h'
      correctAns = $correct_ans_main
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.733
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if TrialType == "Match":
            correct_ans_main = rand_exp_keys[0]
        else:
            correct_ans_main = rand_exp_keys[1]
      End Routine:
        if not judge.keys:
            doCorrect = 0
            doIncorrect = 0
            doSlow = 1
        elif judge.corr:
            doCorrect = 1
            doIncorrect = 0
            doSlow = 0

        else:
            doCorrect = 0
            doIncorrect = 1
            doSlow = 0

        count = count + 1

        if count == 64:
            doBreak = 1
        else:
            doBreak = 0
  Routine break_2
    TextComponent break_text
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please take a break before starting the second half of the trials.
        Rest your eyes, gaze away from the computer for a moment if possible.

        When you are ready, press space to continue....
    KeyboardComponent break_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_exp
    TextComponent conclusion
      letterHeight = .045
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This concludes the experimental phase. We will now ask you a few questions. Please press space when you are ready to continue.
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = times
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Flow
  Routine welcome
  Routine Ins1
  LoopInitiator check_trials loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'dict_key': 'self'},
      {'dict_key': 'stranger'}]
    Routine PairCheck
    LoopInitiator correct_dummy loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = practice_correct_ans
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      Routine correct
    LoopTerminator correct_dummy
    LoopInitiator incorrect_dummy loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = practice_incorrect_ans
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      Routine incorrect
    LoopTerminator incorrect_dummy
  LoopTerminator check_trials
  Routine exp_Ins
  Routine exp_Ins1
  Routine exp_Ins2
  Routine exp_Ins3
  LoopInitiator prac_trials loopType="TrialHandler"
    conditionsFile = trialsPraNEGATIVE.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Images/garbagedump2.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images/shot4.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images/rubberduck1.jpg', 'Valence': 'positive', 'Identity': 'stranger', 'Label': 'STRANGER', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images/yoga1.jpg', 'Valence': 'positive', 'Identity': 'stranger', 'Label': 'STRANGER', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images/angryface4.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'BOTTOM', 'PictureX': -0.25, 'LabelX': 0.2},
      {'Image': 'Images/destruction7.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'BOTTOM', 'PictureX': -0.25, 'LabelX': 0.2},
      {'Image': 'Images/cold4.jpg', 'Valence': 'positive', 'Identity': 'stranger', 'Label': 'STRANGER', 'TrialType': 'Match', 'PictureLoc': 'BOTTOM', 'PictureX': -0.25, 'LabelX': 0.2},
      {'Image': 'Images/yoga1.jpg', 'Valence': 'positive', 'Identity': 'stranger', 'Label': 'STRANGER', 'TrialType': 'Match', 'PictureLoc': 'BOTTOM', 'PictureX': -0.25, 'LabelX': 0.2}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
    Routine fixation
    Routine prac_main_frame
    LoopInitiator prac_corr loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doCorrect
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      Routine correct
    LoopTerminator prac_corr
    LoopInitiator prac_incorrect loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doIncorrect
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      Routine incorrect
    LoopTerminator prac_incorrect
    LoopInitiator prac_slow loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doSlow
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      Routine too_slow
    LoopTerminator prac_slow
    Routine ITI
  LoopTerminator prac_trials
  Routine main_ins
  LoopInitiator trials_main loopType="TrialHandler"
    conditionsFile = trialsNEGATIVE.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Image': 'Images\\angryface4.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\destruction7.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\dirt1.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\fence4.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\frustratedpose5.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\garbagedump2.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\miserablepose2.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2},
      {'Image': 'Images\\shot4.jpg', 'Valence': 'negative', 'Identity': 'self', 'Label': 'SELF', 'TrialType': 'Match', 'PictureLoc': 'TOP', 'PictureX': 0.25, 'LabelX': -0.2}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
    Routine fixation
    Routine main_frame
    LoopInitiator corr_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doCorrect
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      Routine correct
    LoopTerminator corr_loop
    LoopInitiator incorr_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doIncorrect
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      Routine incorrect
    LoopTerminator incorr_loop
    LoopInitiator slow_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doSlow
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      Routine too_slow
    LoopTerminator slow_loop
    Routine ITI
    LoopInitiator breakLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = doBreak
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      Routine break_2
    LoopTerminator breakLoop
  LoopTerminator trials_main
  Routine end_exp
